PsychoPy2experiment version="2021.2.3"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = test
  Save hdf5 file = True
  Screen = 1
  Show info dlg = False
  Units = pix
  Window size (pixels) = [1440, 900]
  color = $[-0.8,-0.8,-0.8]
  elAddress = 100.1.1.1
  elDataFiltering = FILTER_LEVEL_2
  elLiveFiltering = FILTER_LEVEL_OFF
  elModel = EYELINK 1000 DESKTOP
  elPupilAlgorithm = ELLIPSE_FIT
  elPupilMeasure = PUPIL_DIAMETER
  elSampleRate = 1000
  elSimMode = False
  elTrackEyes = LEFT_EYE
  elTrackingMode = PUPIL_CR_TRACKING
  expName = final_design_experiment
  eyetracker = SR Research Ltd
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Routines
  Routine welcome_screen
    TextComponent welcome_text
      letterHeight = 30
      startVal [time (s)] = 0.0
      wrapWidth = 1000
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      text:
        Welcome ,

        Make an eyement AS FAST AS possible to the target appearing right or left  side of the screen.
        If eye movements on the target you will receive "Correct" as a feedback, if it is not feedback will be  "False".

        Press "Space" key to start the experiment.
    KeyboardComponent welcome_key
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent calibration_code
      Code Type = Py
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      Begin Experiment:
        #ioConfig[ioDevice]['monitor_event_types'] = ['SaccadeStartEvent','SaccadeEndEvent']
        #eyetracker.runSetupProcedure()
        #Import Required Libraries
        # 1 means r_h, 0 means r_l
        import random
        import time
        #Setting mouse to invisible
        win.mouseVisible = False
        #Target Location
        target_loc_right = 600
        target_loc_left = -600
        #Feedback and cue text
        high_reward_text = '100 points'
        low_reward_text = '10 points'
        no_reward_text = '0 points'
        space = 'press space key to continue'
        cue_right = '->'
        cue_left = '<-'
        correct_text = "correct"
        false_text = "false"
        #Size of target,cue,feedback and invisible target
        target_size = 25
        invisible_target_size = 125
        feedback_text_size = 60
        fixation_size = 30
        cue_size = 30
        helper_size = 0
        #Points and texts for scoreboard
        count = 0
        score_1 = 19980
        score_2 = 14840
        score_3 = 9350
        score_4 = 4550
        score_1_text = f'JH: {score_1} points.'
        score_2_text = f'FD: {score_2} points.'
        score_3_text = f'CD: {score_3} points.'
        score_4_text = f'KD:  {score_4} points.'
      Begin Routine:
        #Sending message
        eyetracker.sendMessage('Welcome')
      End Experiment:
        eyetracker.setRecordingState(False)
    CodeComponent code_8
      Code Type = Auto->JS
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      Before Experiment:
        """
        This is python document of Psychopy that involves all the
        code written by me and psychopy. For running this experiment
        make sure that you read Readme document. If any of the conditions
        described in that document is not met Psychopy will raise an error.
        If everything in the Readme document is setted up you can just click
        green run arrow in Psychopy and it will run the experiment for you.

        The experiment involves two different blocks, first block is for baseline
        condition which we don't give any reward to the participants, in second block
        participant receive reward based on their performance.

        In each block experimental procedure is the same, only whether participant will
        receive reward or not or which side of the screen will give reward changes. Each
        run starts with fixation cross appearing on the screen and it is followed by a cue arrow
        that is showing either right or left side of the screen. Before cue target disappears a "beep"
        sound played to indicate target will appear. After cue disappeared there is 150ms-200ms
        gap and after this gap target appears either right or left side of the screen. After the target
        there is a feedback screen, in baseline condition this feedback screen will show whether participant
        made and eye movement to the target or not, if it is on target they receive "right" if it is
        not they will receive "false" as a feedback. In reward condition feedback either is "100 points"
        or "10 points" based on condition. There is two different condition in reward block of the experiment,
        first condition is that right side gives high reward %80 percent of the time and gives
        low reward %20 percent of them and left side gives low reward %80 percent of the time and gives
        high reward %20 percent of them, second condition is that left side gives high reward %80 percent of
        the time and gives low reward %20 percent of them right side gives low reward %80 percent
        of the time and gives high reward %20 percent of them. At the end of each reward block
        participant will see a scoreboard that show their result and fake results of other people,
        idea of scoreboard is to encourage people to be more competetive.

        Calibration routine in PSychopy will run eye-track calibration and validation, you can change
        appearance of targets for calibration and validation, number of points, progress time or animation.

        Welcome Screen is the first screen of the experiment gives relevant information about the experiment
        and participant can start experiment by starting "space button".

        Train is the baseline block.


        """
  Routine routine_1
    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        eyetracker.setRecordingState(True)
      Each Frame:
        position_training_1 = eyetracker.getLastGazePosition()

        try:
            position_training = eyetracker.getLastGazePosition()

            if polygon.contains(position_training):
                text_new = 'Correct'
            else:
                text_new = 'False'
        except:
            text_new = 'Connection with eye tracker lost'
    TextComponent text
      letterHeight = 30
      startVal [time (s)] = 0.0
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      text [set every frame]:
        $position_training_1
    PolygonComponent polygon
      fillColor = white
      pos = (400, 0)
      shape = circle
      size = 30
      startVal [time (s)] = 0.0
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    TextComponent text_3
      letterHeight = 25
      pos = (0, 200)
      startVal [time (s)] = 0.0
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      text [set every frame]:
        $text_new
  Routine start_screen_test
    TextComponent text_2
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        Press Space
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine test_block_1
    PolygonComponent fixation_test_1
      fillColor = white
      shape = cross
      size = fixation_size
      startVal [time (s)] = 0.0
      stopVal [time (s)] = $fixation_training_b1
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    TextComponent cue_block1
      letterHeight = cue_size
      startVal [time (s)] = $fixation_training_b1
      stopVal [time (s)] = $cue_training_b1
      text [set every frame] = $cue_text_b1
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    SoundComponent sound_2
      sound = right.wav
      startVal [time (s)] = $sound_b1
      stopVal [duration (s)] = 0.1
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    TextComponent gap_test_1
      letterHeight = 0.1
      startVal [time (s)] = $fixation_training_b1
      stopVal [time (s)] = $gap_training_b1
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    PolygonComponent circle_test_2
      fillColor = $[-0.8,-0.8,-0.8]
      lineColor = $[-0.8,-0.8,-0.8]
      pos [set every repeat] = location
      shape = circle
      size = invisible_target_size
      startVal [time (s)] = $gap_training_b1
      stopVal [time (s)] = $poly_training_b1
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    PolygonComponent circle_test
      fillColor = white
      pos [set every repeat] = location
      shape = circle
      size = target_size
      startVal [time (s)] = $gap_training_b1
      stopVal [time (s)] = $poly_training_b1
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    TextComponent feedback_test_1
      letterHeight = feedback_text_size
      startVal [time (s)] = $poly_training_b1
      stopVal [time (s)] = $feedback_training_b1
      text [set every frame] = $text_feedback
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    CodeComponent code_test_1
      Code Type = Both
      Begin JS Routine:
        import * as random from 'random';
        var cue_b1, cue_training_b1, feedback_training_b1, fixation_training_b1, gap_training_b1, number_2_t_1, number_t_1, poly_training_b1, sound_b1;
        eyetracker.sendMessage("block1");
        number_t_1 = random.uniform(0, 0.2);
        fixation_training_b1 = (1.0 - number_t_1);
        cue_b1 = random.uniform(0.4, 0.7);
        cue_training_b1 = (cue_b1 + fixation_training_b1);
        sound_b1 = (cue_training_b1 - 0.1);
        number_2_t_1 = random.uniform(0.2, 0.25);
        gap_training_b1 = (cue_training_b1 + number_2_t_1);
        poly_training_b1 = (1 + gap_training_b1);
        feedback_training_b1 = (poly_training_b1 + 1);
        eyetracker.sendMessage("target_s", {"time_offset": gap_training_b1});
        eyetracker.sendMessage("target_e", {"time_offset": poly_training_b1});
      Begin Routine:
        eyetracker.sendMessage('block1')
        #Generates a random number between 0 and 1 for reward condition
        random_number = random.uniform(0,1)
        #Fixation Duration is between 1.0 to 0.8 seconds.
        number_t_1 = random.uniform(0,0.2)
        fixation_training_b1 = 1.0 - number_t_1
        #Cue Duration is between 0.4 to 0.7 seconds.
        cue_b1 = random.uniform(0.4,0.7)
        cue_training_b1 = cue_b1 + fixation_training_b1
        #Sounc Cue appear last 0.1 seconds of Cue
        sound_b1 = cue_training_b1 - 0.1
        #Gap Duration is 0.2 to 0.25 seconds.
        number_2_t_1 = random.uniform(0.2,0.25)
        gap_training_b1= cue_training_b1 + number_2_t_1
        #Target Duration is 1 second
        poly_training_b1 = 1+ gap_training_b1
        #Feedback Duration is 1 second
        feedback_training_b1 = poly_training_b1 + 1
        startt_test = time.time()
        switch_test = 0
      Each Frame:
        try:
            #If target appears right side if the screen cue is "->", if it appears on left cue is ""<-"
            if circle_test.pos[0] == target_loc_right:
                cue_text_b1 = cue_right
            elif circle_test.pos[0] == target_loc_left:
                cue_text_b1 = cue_left
            else:
                cue_text_b1 = ' '
            position = eyetracker.getLastGazePosition() #Gets last eye tracker position every frame.
            if circle_test.pos[0] == target_loc_right: #If target appears right side of screen
                if circle_test_2.contains(position) and 0.2<random_number<=1: #If invisible target circle contains last eye movement.
                    text_feedback = high_reward_text
                elif circle_test_2.contains(position) and 0<random_number<=0.2:
                    text_feedback = low_reward_text
                else:
                    text_feedback = no_reward_text
            if circle_test.pos[0] == target_loc_left:
                if circle_test_2.contains(position) and 0.2<random_number<=1:
                    text_feedback = low_reward_text
                elif circle_test_2.contains(position) and 0<random_number<=0.2:
                    text_feedback = high_reward_text
                else:
                    text_feedback = no_reward_text
        except:
            text_feedback = no_reward_text
            position = (999,999)

        thisExp.addData('point_results',text_feedback)
        thisExp.addData('reward_loc',1)

        #Sending messages to eyetracker
        if time.time()-startt_test > fixation_training_b1 and switch_test ==0:
            eyetracker.sendMessage(f'fixation_offset_b1: {fixation_training_b1}')
            print(f'fixation_b1 {fixation_training_b1},{time.time()-startt_test}')
            switch_test= switch_test + 1
        if time.time()-startt_test>cue_training_b1 and switch_test ==1:
            eyetracker.sendMessage(f'cue_offset_b1: {cue_b1} {cue_training_b1}')
            print(f'cue_b1 {cue_training_b1},{time.time()-startt_test}')
            switch_test = switch_test+1
        if time.time()-startt_test>gap_training_b1 and switch_test ==2:
            eyetracker.sendMessage(f'gap_offset_b1: {number_2_t_1} {gap_training_b1} {text_feedback} {circle_test.pos[0]} 1 ')
            print(f' gap_b1 {gap_training_b1},{time.time()-startt_test}')
            switch_test = switch_test + 1
        if time.time()-startt_test>poly_training_b1 and switch_test ==3:
            eyetracker.sendMessage(f'poly_offset_b1:{poly_training_b1}')
            print(f'poly_b1 {poly_training_b1},{time.time()-startt_test} {text_feedback} {circle_test.pos[0]} r_h ')
            switch_test = switch_test +1
      Each JS Frame:
        try {
            if ((circle_test.pos[0] === target_loc_right)) {
                cue_text_b1 = cue_right;
            } else {
                if ((circle_test.pos[0] === target_loc_left)) {
                    cue_text_b1 = cue_left;
                } else {
                    cue_text_b1 = " ";
                }
            }
            position = eyetracker.getLastGazePosition();
            if ((circle_test.pos[0] === target_loc_right)) {
                if ((circle_test_2.contains(position) && ((0.2 < random_number) && (random_number <= 1)))) {
                    text_feedback = high_reward_text;
                } else {
                    if ((circle_test.contains(position) && ((0 < random_number) && (random_number <= 0.2)))) {
                        text_feedback = low_reward_text;
                    } else {
                        text_feedback = no_reward_text;
                    }
                }
            }
            if ((circle_test.pos[0] === target_loc_left)) {
                if ((circle_test_2.contains(position) && ((0.2 < random_number) && (random_number <= 1)))) {
                    text_feedback = low_reward_text;
                } else {
                    if ((circle_test.contains(position) && ((0 < random_number) && (random_number <= 0.2)))) {
                        text_feedback = high_reward_text;
                    } else {
                        text_feedback = no_reward_text;
                    }
                }
            }
        } catch(e) {
            text_feedback = " ";
            position = [999, 999];
        }
        psychoJS.experiment.addData("Block1_Results", text_feedback);
      End JS Routine:
        if ((text_feedback === high_reward_text)) {
            count = (count + 100);
        }
        if ((text_feedback === low_reward_text)) {
            count = (count + 10);
        } else {
            count = (count + 0);
        }
        count = Math.round(count, 2);
        amount = `You earned ${count} points`;
        if ((count > score_1)) {
            location_first = amount;
            location_second = score_1_text;
            location_third = score_2_text;
            location_forth = score_3_text;
            location_fifth = score_4_text;
        } else {
            location_first = score_1_text;
        }
        if (((score_1 > count) && (count > score_2))) {
            location_first = score_1_text;
            location_second = amount;
            location_third = score_2_text;
            location_forth = score_3_text;
            location_fifth = score_4_text;
        } else {
            location_second = score_2_text;
        }
        if (((score_2 > count) && (count > score_3))) {
            location_first = score_1_text;
            location_second = score_2_text;
            location_third = amount;
            location_forth = score_3_text;
            location_fifth = score_4_text;
        } else {
            location_third = score_3_text;
        }
        if (((score_3 > count) && (count > score_4))) {
            location_first = score_1_text;
            location_second = score_2_text;
            location_third = score_3_text;
            location_forth = amount;
            location_fifth = score_4_text;
        } else {
            location_forth = score_4_text;
        }
        if ((score_4 > count)) {
            location_first = score_1_text;
            location_second = score_2_text;
            location_third = score_3_text;
            location_forth = score_4_text;
            location_fifth = amount;
        }
      End Routine:
        #Give points for each trial
        if text_feedback == high_reward_text:
            count = count + 100
        if text_feedback == low_reward_text:
            count = count + 10
        else:
            count = count + 0
        count = round(count,2)
        #Create Scoreboard
        amount = f"You earned {count} points"
        if count > score_1:
            location_first = amount
            location_second = score_1_text
            location_third = score_2_text
            location_forth = score_3_text
            location_fifth = score_4_text
        else:
            location_first = score_1_text
        if score_1>count>score_2:
            location_first = score_1_text
            location_second = amount
            location_third = score_2_text
            location_forth = score_3_text
            location_fifth = score_4_text
        else:
            location_second = score_2_text
        if score_2>count>score_3:
            location_first = score_1_text
            location_second = score_2_text
            location_third = amount
            location_forth = score_3_text
            location_fifth = score_4_text
        else:
            location_third = score_3_text
        if score_3>count>score_4:
            location_first = score_1_text
            location_second = score_2_text
            location_third = score_3_text
            location_forth = amount
            location_fifth = score_4_text
        else:
            location_forth = score_4_text
        if score_4>count:
            location_first = score_1_text
            location_second = score_2_text
            location_third = score_3_text
            location_forth = score_4_text
            location_fifth = amount

        eyetracker.sendMessage('block1_end')
    EyetrackerRecordComponent eyetracker_test
      startVal [time (s)] = 0.0
      stopVal [time (s)] = $poly_training_b1
      syncScreenRefresh = False
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    PolygonComponent polygon_3
      fillColor = blue
      lineColor = blue
      pos [set every frame] = position
      shape = circle
      size = helper_size
      startVal [time (s)] = 0.0
      stopVal [time (s)] = $feedback_training_b1
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  Routine Break
    TextComponent text_4
      letterHeight = 30
      startVal [time (s)] = 0.0
      wrapWidth = 1000
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      text:
        Welcome,
        Make an eyement AS FAST AS possible to the target appearing right or left  side of the screen.

        Target appearing on the left side of the screen has more chance to to give high reward and target appearing on the right side of the screen has more chance to give a low reward. If eye movements are on the target, you will receive a reward. If is not on the target you will not receive a reward.
        Press "Space" key to start experiment.
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_3
      Code Type = Auto->JS
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      Begin Routine:
        eyetracker.sendMessage('welcome_test_2')
  Routine test_block_2
    PolygonComponent fixation_test_block_2
      fillColor = white
      shape = cross
      size = fixation_size
      startVal [time (s)] = 0.0
      stopVal [time (s)] = $fixation_training_b2
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    TextComponent gap_test_block_2
      letterHeight = 0.1
      startVal [time (s)] = $fixation_training_b2
      stopVal [time (s)] = $gap_training_b2
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    TextComponent cue_block_2
      letterHeight = cue_size
      startVal [time (s)] = $fixation_training_b2
      stopVal [time (s)] = $cue_training_b2
      text [set every frame] = $cue_text_b2
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    SoundComponent sound_3
      sound = right.wav
      startVal [time (s)] = $sound_b2
      stopVal [duration (s)] = 0.1
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    PolygonComponent circle_test_block_3
      fillColor = $[-0.8,-0.8,-0.8]
      lineColor = $[-0.8,-0.8,-0.8]
      pos [set every repeat] = location
      shape = circle
      size = invisible_target_size
      startVal [time (s)] = $gap_training_b2
      stopVal [time (s)] = $poly_training_b2
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    PolygonComponent circle_test_block_2
      fillColor = white
      pos [set every repeat] = location
      shape = circle
      size = target_size
      startVal [time (s)] = $gap_training_b2
      stopVal [time (s)] = $poly_training_b2
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    TextComponent test_feedback_block_2
      letterHeight = feedback_text_size
      startVal [time (s)] = $poly_training_b2
      stopVal [time (s)] = $feedback_training_b2
      text [set every frame] = $text_feedback_2
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    CodeComponent code_test_2
      Code Type = Py
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      Begin Routine:
        #Sending message to eyetracker
        eyetracker.sendMessage('block2')
        #Generates a random number between 0 and 1 for reward condition
        random_number = random.uniform(0,1)
        #Fixation Duration is between 1.0 to 0.8 seconds.
        number_t_2 = random.uniform(0,0.2)
        fixation_training_b2 = 1.0 - number_t_2
        #Cue Duration is between 0.4 to 0.7 seconds.
        cue_b2 = random.uniform(0.4,0.7)
        cue_training_b2 = cue_b2 + fixation_training_b2
        #Sounc Cue appear last 0.1 seconds of Cue
        sound_b2 = cue_training_b2- 0.1
        #Gap Duration is 0.2 to 0.25 seconds.
        number_2_t_2 = random.uniform(0.2,0.25)
        gap_training_b2= cue_training_b2 + number_2_t_2
        #Target Duration is 1 second
        poly_training_b2 = 1+ gap_training_b2
        #Feedback Duration is 1 second
        feedback_training_b2 = poly_training_b2 + 1.0

        startt_test2 = time.time()
        switch_test2 = 0
      Each Frame:
        try:
            if circle_test_block_2.pos[0] == target_loc_right:
                cue_text_b2 = cue_right
            elif circle_test_block_2.pos[0] == target_loc_left:
                cue_text_b2 = cue_left
            else:
                cue_text_b2 = ' '

            position_b2 =  eyetracker.getLastGazePosition()
            if circle_test_block_2.pos[0] == target_loc_right:
                if circle_test_block_3.contains(position_b2) and 0.2<random_number<=1:
                    text_feedback_2 = low_reward_text
                elif circle_test_block_3.contains(position_b2) and 0<random_number<=0.2:
                    text_feedback_2 = high_reward_text
                else:
                    text_feedback_2 = no_reward_text
            if circle_test_block_2.pos[0] == target_loc_left:
                if circle_test_block_3.contains(position_b2) and 0.2<random_number<=1:
                    text_feedback_2 = high_reward_text
                elif circle_test_block_3.contains(position_b2) and 0<random_number<=0.2:
                    text_feedback_2 = low_reward_text
                else:
                    text_feedback_2 = no_reward_text
        except:
            text_feedback_2  =no_reward_text
            position = (999,999)

        thisExp.addData('point_results',text_feedback_2)
        thisExp.addData('reward_loc',0)
        #Sending messages to eyetracker
        if time.time()-startt_test2 > fixation_training_b1 and switch_test2 ==0:
            eyetracker.sendMessage(f'fixation_offset_b2: {fixation_training_b2}')
            print(f'fixation_b2 {fixation_training_b2},{time.time()-startt_test2}')
            switch_test2= switch_test2 + 1
        if time.time()-startt_test2>cue_training_b2 and switch_test2 ==1:
            eyetracker.sendMessage(f'cue_offset_b2: {cue_b2} {cue_training_b2}')
            print(f'cue_b2 {cue_training_b2},{time.time()-startt_test2}')
            switch_test2 = switch_test2+1
        if time.time()-startt_test2>gap_training_b2 and switch_test2 ==2:
            eyetracker.sendMessage(f'gap_offset_b2: {number_2_t_2}  {gap_training_b2} {text_feedback_2} {circle_test_block_2.pos[0]} 0')
            print(f' gap_b2 {gap_training_b2},{time.time()-startt_test2}')
            switch_test2 = switch_test2 + 1
        if time.time()-startt_test2>poly_training_b1 and switch_test2 ==3:
            eyetracker.sendMessage(f'poly_offset_b2:{poly_training_b2}')
            print(f'poly_b2 {poly_training_b2},{time.time()-startt_test2} {text_feedback_2} {circle_test_block_2.pos[0]} r_l')
            switch_test2 = switch_test2 +1
      End Routine:
        eyetracker.sendMessage('block2_end')


        #Give points for each trial
        if text_feedback_2 == high_reward_text:
            count = count + 100
        if text_feedback_2 == low_reward_text:
            count = count + 10
        else:
            count = count + 0
        count = round(count,2)
        #Create Scoreboard
        amount = f"You earned {count} points"
        if count > score_1:
            location_first = amount
            location_second = score_1_text
            location_third = score_2_text
            location_forth = score_3_text
            location_fifth = score_4_text
        else:
            location_first = score_1_text
        if score_1>count>score_2:
            location_first = score_1_text
            location_second = amount
            location_third = score_2_text
            location_forth = score_3_text
            location_fifth = score_4_text
        else:
            location_second = score_2_text
        if score_2>count>score_3:
            location_first = score_1_text
            location_second = score_2_text
            location_third = amount
            location_forth = score_3_text
            location_fifth = score_4_text
        else:
            location_third = score_3_text
        if score_3>count>score_4:
            location_first = score_1_text
            location_second = score_2_text
            location_third = score_3_text
            location_forth = amount
            location_fifth = score_4_text
        else:
            location_forth = score_4_text
        if score_4>count:
            location_first = score_1_text
            location_second = score_2_text
            location_third = score_3_text
            location_forth = score_4_text
            location_fifth = amount
    EyetrackerRecordComponent eyetracker_test_block_2
      startVal [time (s)] = 0.0
      stopVal [time (s)] = $poly_training_b2
      syncScreenRefresh = False
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    PolygonComponent polygon_4
      fillColor = blue
      lineColor = blue
      pos [set every frame] = position
      shape = circle
      size = helper_size
      startVal [time (s)] = 0.0
      stopVal [time (s)] = $feedback_training_b2
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  Routine test_start
    TextComponent text_7
      letterHeight = 30
      startVal [time (s)] = 0.0
      wrapWidth = 1000
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      text:
        Welcome,

        Make an eyement AS FAST AS possible to the target appearing right or left  side of the screen.

        Target appearing on the right side of the screen has more chance to to gove high reward and target appearing on the left side of the screen has more chance to give a low reward. If eye movements are on the target, you will receive a reward. If is not on the target you will not receive a reward.

        Press "Space" key to start experiment.
    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Experiment:
        eyetracker.sendMessage('welcome_test_1')
  Routine end_screen
    TextComponent text_5
      letterHeight = 30
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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      text:
        Thank you for participating.

        You can leave.
    KeyboardComponent key_resp_4
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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  Routine train
    PolygonComponent fixation_training
      fillColor = white
      shape = cross
      size = fixation_size
      startVal [time (s)] = 0.0
      stopVal [time (s)] = $fixation_training_t
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    TextComponent cue_training
      letterHeight = cue_size
      startVal [time (s)] = $fixation_training_t
      stopVal [time (s)] = $cue_training_t
      text [set every frame] = $cue_text
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    SoundComponent sound_1
      sound = right.wav
      startVal [time (s)] = $sound_t
      stopVal [duration (s)] = 0.1
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    TextComponent gap_training
      letterHeight = 0.1
      startVal [time (s)] = $cue_training_t
      stopVal [time (s)] = $gap_training_t
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    PolygonComponent circle_training_2
      fillColor = $[-0.8,-0.8,-0.8]
      lineColor = $[-0.8,-0.8,-0.8]
      pos [set every repeat] = location
      shape = circle
      size = invisible_target_size
      startVal [time (s)] = $gap_training_t
      stopVal [time (s)] = $poly_training_t
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    PolygonComponent circle_training
      fillColor = white
      pos [set every repeat] = $location
      shape = circle
      size = target_size
      startVal [time (s)] = $gap_training_t
      stopVal [time (s)] = $poly_training_t
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    TextComponent feedback_training
      letterHeight = feedback_text_size
      startVal [time (s)] = $poly_training_t
      stopVal [time (s)] = $feedback_training_t
      text [set every frame] = $text_feedback_training
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    CodeComponent code_training
      Code Type = Both
      Begin JS Routine:
        import * as random from 'random';
        var cue_t, cue_training_t, feedback_training_t, fixation_training_t, gap_training_t, number_2_t, number_t, poly_training_t, sound_t;
        eyetracker.sendMessage("train");
        number_t = random.uniform(0, 0.2);
        fixation_training_t = (1.0 - number_t);
        cue_t = random.uniform(0.4, 0.7);
        cue_training_t = (cue_t + fixation_training_t);
        sound_t = (cue_training_t - 0.1);
        number_2_t = random.uniform(0.2, 0.25);
        gap_training_t = (number_2_t + cue_training_t);
        poly_training_t = (1 + gap_training_t);
        feedback_training_t = (poly_training_t + 1.0);
        eyetracker.sendMessage("target_s", {"time_offset": gap_training_t});
        eyetracker.sendMessage("target_e");
      Begin Routine:
        #Sending Message to eye tracker
        eyetracker.sendMessage('train')
        #Fixation Duration is between 1.0 to 0.8 seconds.
        number_t = random.uniform(0,0.2)
        fixation_training_t = 1.0 - number_t
        #Cue Duration is between 0.4 to 0.7 seconds.
        cue_t = random.uniform(0.4,0.7)
        cue_training_t = cue_t + fixation_training_t
        #Sounc Cue appear last 0.1 seconds of Cue
        sound_t = cue_training_t - 0.1
        #Gap Duration is 0.2 to 0.25 seconds.
        number_2_t = random.uniform(0.2,0.25)
        gap_training_t=  number_2_t + cue_training_t
        #Target Duration is 1 second.
        poly_training_t = 1+ gap_training_t
        #Feedback Duration is 1 second.
        feedback_training_t = poly_training_t + 1.0



        startt = time.time()
        switch = 0
      Each Frame:
        try:
            if circle_training.pos[0] == target_loc_right:
                cue_text = cue_right
            elif circle_training.pos[0] == target_loc_left:
                cue_text = cue_left
            else:
                cue_text = ' '
            position_training = eyetracker.getLastGazePosition()
            if circle_training.pos[0] == target_loc_right:
                if circle_training_2.contains(position_training):
                    text_feedback_training = correct_text
                else:
                    text_feedback_training = false_text
            if circle_training.pos[0] == target_loc_left:
                if circle_training_2.contains(position_training):
                    text_feedback_training = correct_text
                else:
                    text_feedback_training = false_text
        except:
            text_feedback_training =' '
            position_training = (999,999)

        #Sending messages to eyetracker
        if time.time()-startt > fixation_training_t and switch ==0:
            eyetracker.sendMessage(f'fixation_offset: {fixation_training_t}')
            print(f'fixation {fixation_training_t},{time.time()-startt}')
            switch= switch + 1
        if time.time()-startt>cue_training_t and switch ==1:
            eyetracker.sendMessage(f'cue_offset: {cue_t} {cue_training_t}')
            print(f'cue {cue_training_t},{time.time()-startt}')
            switch = switch+1
        if time.time()-startt>gap_training_t and switch ==2:
            eyetracker.sendMessage(f'gap_offset: {number_2_t}  {gap_training_t}')
            print(f' gap {gap_training_t},{time.time()-startt}')
            switch = switch + 1
        if time.time()-startt>poly_training_t and switch ==3:
            eyetracker.sendMessage(f'poly_offset:{poly_training_t} {text_feedback_training}')
            print(f'poly {poly_training_t},{time.time()-startt} {text_feedback_training}')
            switch = switch +1
      Each JS Frame:
        try {
            if ((circle_training.pos[0] === target_loc_right)) {
                cue_text = cue_right;
            } else {
                if ((circle_training.pos[0] === target_loc_left)) {
                    cue_text = cue_left;
                } else {
                    cue_text = " ";
                }
            }
            position_training = eyetracker.getLastGazePosition();
            if ((circle_training.pos[0] === target_loc_right)) {
                if (circle_training_2.contains(position_training)) {
                    text_feedback_training = correct_text;
                } else {
                    text_feedback_training = false_text;
                }
            }
            if ((circle_training.pos[0] === target_loc_left)) {
                if (circle_training_2.contains(position_training)) {
                    text_feedback_training = correct_text;
                } else {
                    text_feedback_training = false_text;
                }
            }
        } catch(e) {
            text_feedback_training = " ";
            position_training = [999, 999];
        }
        psychoJS.experiment.addData("Test_Results", text_feedback_training);
      End Routine:
        eyetracker.sendMessage('train_end')
    EyetrackerRecordComponent etRecord
      startVal [time (s)] = 0
      stopVal [time (s)] = $poly_training_t
      syncScreenRefresh = True
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    PolygonComponent polygon_2
      fillColor = blue
      lineColor = blue
      pos [set every frame] = position_training
      shape = circle
      size = helper_size
      startVal [time (s)] = 0.0
      stopVal [time (s)] = $poly_training_t
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  Routine Amount_1
    TextComponent text_6
      letterHeight = 30
      startVal [time (s)] = 0.0
      wrapWidth = 1000
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      text [set every repeat]:
        $'1)'+location_first
        +'\n'+'\n'+'2)'+location_second
        +'\n'+'\n'+'3)'+ location_third+'\n'+'\n'+'4)'+location_forth+'\n'+'\n'+'5)'+location_fifth
    KeyboardComponent key_resp_5
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_10
      letterHeight = 50
      pos = (0, 350)
      startVal [time (s)] = 0.0
      text = Scoreboard
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    TextComponent text_12
      letterHeight = 30
      pos = (0, -350)
      startVal [time (s)] = 0.0
      text [set every repeat] = $space
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    CodeComponent code_4
      Code Type = Auto->JS
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      Begin Routine:
        eyetracker.sendMessage('scoreboard_1')
  Routine Amount_2
    TextComponent text_8
      letterHeight = 30
      startVal [time (s)] = 0.0
      wrapWidth = 1000
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      text [set every repeat]:
        $'1)'+location_first
        +'\n'+'\n'+'2)'+location_second
        +'\n'+'\n'+'3)'+ location_third+'\n'+'\n'+'4)'+location_forth+'\n'+'\n'+'5)'+location_fifth
    KeyboardComponent key_resp_6
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_11
      letterHeight = 50
      pos = (0, 350)
      startVal [time (s)] = 0.0
      text = Scoreboard
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    TextComponent text_13
      letterHeight = 30
      pos = (0, -350)
      startVal [time (s)] = 0.0
      text [set every repeat] = $space
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    CodeComponent code_5
      Code Type = Auto->JS
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      Begin Routine:
        eyetracker.sendMessage('scoreboard_2')
  Routine Total_Amount
    TextComponent text_9
      letterHeight = 30
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text [set every repeat] = $amount + '\n' + space
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    KeyboardComponent key_resp_7
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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  EyetrackerValidationRoutine validation
    borderColor = white
    borderWidth = 10
    colorSpace = rgb
    cursorFillColor = white
    disabled = True
    expandDur = 1
    expandScale = 1.5
    innerBorderColor = white
    innerBorderWidth = 10
    innerFillColor = white
    innerRadius = 10
    movementAnimation = False
    movementDur = 1.0
    outerRadius = 10
    progressMode = space key
    randomisePos = False
    saveAsImg = False
    showResults = True
    targetDelay = 1.0
    targetDur = 1.5
    targetLayout = NINE_POINTS
    targetPositions = NINE_POINTS
    units = from exp settings
  Routine fixation
    PolygonComponent fixation_train
      fillColor = white
      shape = cross
      size = fixation_size
      startVal [time (s)] = 0.0
      stopVal [time (s)] = $fixation_training_t
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    CodeComponent code_6
      Code Type = Auto->JS
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      Begin Routine:
        eyetracker.sendMessage('fixation_s_t')
        import random
        number_t = random.uniform(0,0.2)
        fixation_training_t = 1.0 - number_t
        cue_t = random.uniform(0.4,0.7)
        cue_training_t = cue_t + fixation_training_t
        sound_t = cue_training_t - 0.1
        #Gap Duration is 0.2 to 0.25 seconds.
        number_2_t = random.uniform(0.2,0.25)
        gap_training_t=  number_2_t + cue_training_t
      Each Frame:
        if circle_cuee.pos[0] == target_loc_right:
            cue_text_t = cue_right
        elif circle_cuee.pos[0] == target_loc_left:
            cue_text_t = cue_left
        else:
            cue_text_t = ' '
      End Routine:
        eyetracker.sendMessage('gao_offset')
    EyetrackerRecordComponent etRecord_2
      startVal [time (s)] = 0.0
      stopVal [time (s)] = $gap_training_t
      syncScreenRefresh = False
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    PolygonComponent circle_cuee
      fillColor = white
      pos [set every repeat] = location
      shape = cross
      size = 0
      startVal [time (s)] = $fixation_training_t
      stopVal [time (s)] = $cue_training_t
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    TextComponent cue_text
      letterHeight = cue_size
      startVal [time (s)] = $fixation_training_t
      stopVal [time (s)] = $cue_training_t
      text [set every frame] = $cue_text_t
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    TextComponent gap_train
      letterHeight = 0.1
      startVal [time (s)] = $cue_training_t
      stopVal [time (s)] = $gap_training_t
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  Routine target_train
    PolygonComponent poly_invisible
      fillColor = $[-0.8,-0.8,-0.8]
      lineColor = $[-0.8,-0.8,-0.8]
      pos [set every repeat] = location
      shape = circle
      size = invisible_target_size
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 1.0
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    PolygonComponent poly_training
      fillColor = white
      pos [set every repeat] = location
      shape = circle
      size = target_size
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 1.0
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    CodeComponent code_7
      Code Type = Auto->JS
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      Begin Routine:
        eyetracker.sendMessage('target_onset')
      Each Frame:
        try:
            position_training = eyetracker.getLastGazePosition()
            if poly_training.pos[0] == target_loc_right:
                if poly_invisible.contains(position_training):
                    text_feedback_training = correct_text
                else:
                    text_feedback_training = false_text
            if poly_training.pos[0] == target_loc_left:
                if poly_invisible.contains(position_training):
                    text_feedback_training = correct_text
                else:
                    text_feedback_training = false_text
        except:
            text_feedback_training ='Nope'
            position_training = (999,999)
      End Routine:
        eyetracker.sendMessage('target_offset')
    EyetrackerRecordComponent etRecord_3
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      syncScreenRefresh = False
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  Routine feedback_train
    TextComponent feedback_tra
      letterHeight = feedback_text_size
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 1
      text [set every frame] = $text_feedback_training
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  EyetrackerCalibrationRoutine calibration
    borderColor = white
    borderWidth = 1
    colorSpace = rgb
    expandDur = 1
    expandScale = 1.5
    fillColor = white
    innerBorderColor = white
    innerBorderWidth = 1
    innerFillColor = white
    innerRadius = 25
    movementAnimation = False
    movementDur = 1.0
    outerRadius = 25
    progressMode = space key
    randomisePos = True
    targetDelay = 1.0
    targetDur = 1.5
    targetLayout = NINE_POINTS
    units = from exp settings
Flow
  EyetrackerCalibrationRoutine calibration
  Routine welcome_screen
  LoopInitiator train_loop loopType="TrialHandler"
    Selected rows = 0:2
    conditionsFile = location_reward.xlsx
    loopType = fullRandom
    nReps = 3
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    conditions:
      [{'location': (300, 0)},
      {'location': (-300, 0)},
      {'location': None},
      {'location': None},
      {'location': None},
      {'location': None},
      {'location': None},
      {'location': None},
      {'location': None},
      {'location': None},
      {'location': None},
      {'location': None},
      {'location': None},
      {'location': None},
      {'location': None},
      {'location': None},
      {'location': None},
      {'location': None},
      {'location': None},
      {'location': None},
      {'location': None},
      {'location': None},
      {'location': None},
      {'location': None},
      {'location': None},
      {'location': None}]
    Routine train
  LoopTerminator train_loop
  LoopInitiator big_loop loopType="TrialHandler"
    loopType = fullRandom
    nReps = 2
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    Routine test_start
    LoopInitiator test_block_1_loop loopType="TrialHandler"
      Selected rows = 0:2
      conditionsFile = location_reward.xlsx
      loopType = fullRandom
      nReps = 8
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      conditions:
        [{'location': (800, 0), 'reward': 'High', 'location_2': (200, 0)},
        {'location': (-800, 0), 'reward': 'High', 'location_2': (200, 0)},
        {'location': None, 'reward': 'High', 'location_2': (200, 0)},
        {'location': None, 'reward': 'High', 'location_2': (200, 0)},
        {'location': None, 'reward': 'High', 'location_2': (200, 0)},
        {'location': None, 'reward': 'High', 'location_2': (200, 0)},
        {'location': None, 'reward': 'High', 'location_2': (200, 0)},
        {'location': None, 'reward': 'Low', 'location_2': (200, 0)},
        {'location': None, 'reward': 'Low', 'location_2': (200, 0)},
        {'location': None, 'reward': 'Low', 'location_2': (-200, 0)},
        {'location': None, 'reward': 'Low', 'location_2': (-200, 0)},
        {'location': None, 'reward': 'Low', 'location_2': (-200, 0)},
        {'location': None, 'reward': 'Low', 'location_2': (-200, 0)},
        {'location': None, 'reward': 'Low', 'location_2': (-200, 0)},
        {'location': None, 'reward': 'Low', 'location_2': (-200, 0)},
        {'location': None, 'reward': 'Low', 'location_2': (-200, 0)},
        {'location': None, 'reward': 'Low', 'location_2': (-200, 0)},
        {'location': None, 'reward': 'High', 'location_2': (-200, 0)},
        {'location': None, 'reward': 'High', 'location_2': (-200, 0)},
        {'location': None, 'reward': None, 'location_2': None},
        {'location': None, 'reward': None, 'location_2': None},
        {'location': None, 'reward': None, 'location_2': None},
        {'location': None, 'reward': None, 'location_2': None},
        {'location': None, 'reward': None, 'location_2': None},
        {'location': None, 'reward': None, 'location_2': None}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
      Routine test_block_1
    LoopTerminator test_block_1_loop
    Routine Amount_1
    Routine Break
    LoopInitiator test_block_2_loop loopType="TrialHandler"
      Selected rows = 0:2
      conditionsFile = location_reward.xlsx
      loopType = fullRandom
      nReps = 8
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      conditions:
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      Routine test_block_2
    LoopTerminator test_block_2_loop
    Routine Amount_2
  LoopTerminator big_loop
  Routine end_screen
